Key	Value
CellProfiler_Version	4.2.4
ChannelType_GFP	Grayscale
ChannelType_Sensor	Grayscale
ImageSet_Zip_Dictionary	b'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'
Metadata_Tags	"[""ImageNumber""]"
Pipeline_Pipeline	"CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^r(?P<WellRow>\d{2})c(?P<WellColumn>\d{2})f(?P<Site>\d{2})p(?P<Plane>\d{2})-ch(?P<ChannelNumber>\d)sk(?P<Time>\d{1,2})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelNumber ""1"")
    Name to assign these images:Sensor
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber ""2"")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ImageMath:[module_num:5|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ChannelsCombined
    Image or measurement?:Image
    Select the first image:GFP
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Sensor
    Multiply the second image by:1.0
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:ChannelsCombined
    Name the primary objects to be identified:GFP_cells
    Typical diameter of objects, in pixel units (Min,Max):70,400
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:200
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.08,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Minimum Cross-Entropy

MeasureObjectIntensity:[module_num:7|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
    Select images to measure:GFP, Sensor
    Select objects to measure:GFP_cells

ExportToSpreadsheet:[module_num:8|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|OneDrive\\Escritorio\\Sample_CP
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:GFP_cells|Location_Center_Z,GFP_cells|Location_Center_X,GFP_cells|Location_Center_Y,GFP_cells|Location_CenterMassIntensity_Z_GFP,GFP_cells|Location_CenterMassIntensity_Z_Sensor,GFP_cells|Location_CenterMassIntensity_Y_GFP,GFP_cells|Location_CenterMassIntensity_Y_Sensor,GFP_cells|Location_CenterMassIntensity_X_Sensor,GFP_cells|Location_CenterMassIntensity_X_GFP,GFP_cells|Location_MaxIntensity_Y_GFP,GFP_cells|Location_MaxIntensity_Y_Sensor,GFP_cells|Location_MaxIntensity_Z_GFP,GFP_cells|Location_MaxIntensity_Z_Sensor,GFP_cells|Location_MaxIntensity_X_Sensor,GFP_cells|Location_MaxIntensity_X_GFP,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:G6PDi
    Overwrite existing files without warning?:No
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"
Run_Timestamp	2022-09-28T01:38:53.576229
